CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{1,2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, you’ll need to specify the image type as ‘Color image’ and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'Well', u'dam_53BP1': u'Well', u'RBP': u'Well'}, {u'DAPI': u'Site', u'dam_53BP1': u'Site', u'RBP': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:dam_53BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:RBP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0015,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:dam_53BP1
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow

MaskImage:[module_num:7|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
    Select the input image:EnhancedGreen
    Name the output image:MaskedGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskedGreen
    Name the primary objects to be identified:foci_53BP1
    Typical diameter of objects, in pixel units (Min,Max):2,14
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0015,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.5
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:RBP
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow

MaskImage:[module_num:10|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
    Select the input image:EnhancedRed
    Name the output image:MaskedRed
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

FlipAndRotate:[module_num:11|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enabled:False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
    Select the input image:MaskedRed
    Name the output image:MaskedRed
    Select method to flip image:Left to right and top to bottom
    Select method to rotate image:Do not rotate
    Crop away the rotated edges?:Yes
    Calculate rotation:Individually
    Enter coordinates of the top or left pixel:0,0
    Enter the coordinates of the bottom or right pixel:0,100
    Select how the specified points should be aligned:horizontally
    Enter angle of rotation:0.0

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:MaskedRed
    Name the primary objects to be identified:RBP_foci
    Typical diameter of objects, in pixel units (Min,Max):2,14
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0008,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.0
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
RelateObjects:[module_num:13|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notes:['If we want to consider objects which touch or overlap each other are considered to be colocalized, this module establishes a ‘parent-child’ relationship between two sets of objects. A ‘parent’ object is one that touches, overlaps or encloses a ‘child’ object. Object2 objects that touch or overlap with an Object2 object are considered to be colocalized and will be assigned as a parent to a corresponding child.  All others have no children and are labeled accordingly.', '', 'In addition, the distance between object centroids may also be obtained with this module by enabling the ‘Calculate distances?’’ setting.']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
    Parent objects:foci_53BP1
    Child objects:RBP_foci
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ClassifyObjects:[module_num:14|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:foci_53BP1
    Select the measurement to classify by:Children_RBP_foci_Count
    Select bin spacing:Custom-defined bins
    Number of bins:2
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:NotColocalized,Colocalized
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
ExpandOrShrinkObjects:[module_num:15|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notes:['If we only want to consider objects whose centroids are N pixels apart, this module shrinks the objects identified in the Stain1 image to a point and names the resultant points ShrunkenObjects1. The second ExpandOrShrinkObjects does the same for Stain2.']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
    Select the input objects:foci_53BP1
    Name the output objects:Shrunken53BP1
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:16|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notes:['If we only want to consider objects whose centroids are N pixels apart, this module shrinks the objects identified in the Stain1 image to a point and names the resultant points ShrunkenObjects1. The second ExpandOrShrinkObjects does the same for Stain2.']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
    Select the input objects:RBP_foci
    Name the output objects:ShrunkenRBP
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:17|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notes:['We now expand the previously shrunken point objects by 2 pixels, i.e., two pixels are added to either side of the single-pixel object to create new objects which are 5 pixels across, as shown in Fig. 2. These new objects are named ExpandedObjects1 and ExpandedObjects2.']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
    Select the input objects:Shrunken53BP1
    Name the output objects:Expanded53BP1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
ExpandOrShrinkObjects:[module_num:18|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notes:['We now expand the previously shrunken point objects by 2 pixels, i.e., two pixels are added to either side of the single-pixel object to create new objects which are 5 pixels across, as shown in Fig. 2. These new objects are named ExpandedObjects1 and ExpandedObjects2.']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
    Select the input objects:ShrunkenRBP
    Name the output objects:ExpandedRBP
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
RelateObjects:[module_num:19|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notes:['In this case, ExpandedObjects1 are assigned to be parents, with ExpandedObject2 as children. Therefore, objects in ExpandedObjects1 which have children and 2 pixels apart or less are colocalized with objects in ExpandedObjects2.']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
    Parent objects:Expanded53BP1
    Child objects:ExpandedRBP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ClassifyObjects:[module_num:20|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notes:['The ClassifyObjects module categorizes objects into bins associated with a particular measurement.  In this case, the chosen measurement is the child count for Objects1. The value 0.5 is chosen as the measurement since we want to distinguish between colocalized objects with children (child count of 1 or greater) versus those without (child count of 0). ', '', 'The result of this module is an absolute count and percentage of objects that fall into the colocalized/non-colocalized bins, and an annotation to each Objects1 object as to whether it falls into a particular bin or not. This approach works well if you just want a yes/no readout per object.']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Expanded53BP1
    Select the measurement to classify by:Children_ExpandedRBP_Count
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:NotColocalized,Colocalized
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
MeasureColocalization:[module_num:21|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notes:['The Measure Correlation module measures both the correlation of Stain1 and Stain2 across the entire image.  The overall image correlation can give a general sense of how colocalized the features within the images are.', '', 'The correlation measurement is the normalized covariance (covariance divided by the product of standard deviation of pixels in each image). Correlation ranges from -1 (complete inverse correlation) to +1 (complete correlation). Thus, the closer to one the correlation measurement is, the more correlated the two images are and the higher the amount of colocalization.', '', 'Note that if you are not interested in object-based calculations, you could stop here and remove the modules up to the ExportToSpreadsheet module.']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
    Hidden:2
    Hidden:2
    Select an image to measure:EnhancedGreen
    Select an image to measure:EnhancedRed
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select an object to measure:foci_53BP1
    Select an object to measure:Expanded53BP1
    Run all metrics?:Yes
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
FilterObjects:[module_num:22|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notes:['The FilterObjects module effectively does the same operation as Classify Objects, but rather than simply assigning a label to each object, FilterObjects removes all objects that do not pass a criterion. Using the same choice of measurement and cutoff as in Classify Objects, only those Objects1 objects which fall into the co-localized bin are retained. This feature is useful if you want to perform additional operations or measurements on the remaining objects. ', '', 'These two modules can also be used to perform the same operations on the ExpandedObjects1 object set.']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enabled:False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
    Select the objects to filter:Expanded53BP1
    Name the output objects:ColocalizedObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_ExpandedRBP_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:23|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notes:['This module masks (i.e., ‘hides’ from consideration) the pixels of the Objects1 object set which are in common with the Objects2 object set. The result of this operation is the colocalized area as a new object set, named ColocalizedRegions ']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enabled:False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
    Select objects to be masked:Expanded53BP1
    Name the masked objects:ColocalizedRegion
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandedRBP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:24|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notes:['The MeasureImageAreaOccupied module measure various statistics associated with the area taken up by a feature in an image. In this case, we are concerned with Objects1 and ColocalizedRegion. The module counts all the pixels occupied by an given object set and adds them together for the total area occupied by each stained object']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enabled:False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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Objects1
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:ColocalizedRegion
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
MeasureColocalization:[module_num:25|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notes:['The Measure Correlation module measures both the correlation of Stain1 and Stain2 across the entire image.  The overall image correlation can give a general sense of how colocalized the features within the images are.', '', 'The correlation measurement is the normalized covariance (covariance divided by the product of standard deviation of pixels in each image). Correlation ranges from -1 (complete inverse correlation) to +1 (complete correlation). Thus, the closer to one the correlation measurement is, the more correlated the two images are and the higher the amount of colocalization.', '', 'Note that if you are not interested in object-based calculations, you could stop here and remove the modules up to the ExportToSpreadsheet module.']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enabled:False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
    Hidden:2
    Hidden:2
    Select an image to measure:MaskedGreen
    Select an image to measure:MaskedRed
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:53BP1_foci
    Select an object to measure:RBP_foci
    Run all metrics?:Yes
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
CalculateMath:[module_num:26|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notes:['We divide the area occupied by ColocalizedRegion by the area occupied by Objects1 to get a per-image fraction.']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enabled:False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
    Name the output measurement:Stain1Colocalized
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Classify_NotColocalized_NumObjectsPerBin
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Expanded53BP1
    Select the denominator measurement:Classify_NotColocalized
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:27|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/Lecuyer Lab/Thesis/Figure 3 - Screen Hits/Cell Profiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:TOE1_IR_control_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:foci_53BP1
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Expanded53BP1
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
