CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot endwith "Thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigGreen': u'Well', u'OrigBlue': u'Well'}, {u'OrigGreen': u'Site', u'OrigBlue': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:OrigGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast

MaskImage:[module_num:7|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:EnhancedGreen
    Name the output image:MaskedGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskedGreen
    Name the primary objects to be identified:foci_53BP1
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.5
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
MeasureObjectIntensity:[module_num:9|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Hidden:1
    Select an image to measure:OrigBlue
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:10|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Hidden:1
    Select an image to measure:OrigGreen
    Select objects to measure:foci_53BP1

RelateObjects:[module_num:11|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notes:['Establish a parent-child between the foci (“children”) and the nuclei (“parents”) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:foci_53BP1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:12|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/Lecuyer Lab/Thesis/Granularity/Optimization/CellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Eto_12h_0uM
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:foci_53BP1
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
